
includeFile = ../Configurations/Conf1.txt

###################################################### Dose At WaterPhantom #####################################################

s:Sc/DoseAtWaterPhantom/Quantity                  = "DoseToMedium"
s:Sc/DoseAtWaterPhantom/Component                 = "WaterBox"
s:Sc/DoseAtWaterPhantom/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/DoseAtWaterPhantom/OutputType                = "Csv"
s:Sc/DoseAtWaterPhantom/OutputFile                = "DoseAtPhantom"
s:Sc/DoseAtWaterPhantom/SplitByTimeFeature        = "BeamsCount"

##################################################### Energy Dep at Water Phantom ####################################################

s:Sc/EnergyDepAtWaterPhantom/Quantity                  = "EnergyDeposit"
s:Sc/EnergyDepAtWaterPhantom/Component                 = "WaterBox"
s:Sc/EnergyDepAtWaterPhantom/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/EnergyDepAtWaterPhantom/OutputType                = "Csv"
s:Sc/EnergyDepAtWaterPhantom/OutputFile                = "EnergyDepAtPhantom"
s:Sc/EnergyDepAtWaterPhantom/SplitByTimeFeature        = "BeamsCount"